load_file("nrngui.hoc")

// Set from the commandline:
//A = 
//I = 
//C = 
//VS = 
//LK_G = 
//LK_EREV = 


create soma
access soma
soma insert pas

length = 100
soma {
    L = length
    diam = A / (length * PI)
    cm = C
    v = VS

    //(NEURON works in S/cm2 and mV (LK_G is in mS/cm2) )
    g_pas = LK_G / 1000
    e_pas = LK_EREV 
}
soma for (x,0) { // iterate over internal nodes
        v = -20
      }

objref ic
ic = new IClamp(0.5)
ic.del = 100
ic.dur = 150
ic.amp = I / 1000.

// Setup the recording:
objref vecv
objref vect
vect = new Vector(0.5)
vecv = new Vector(0.5)
vect.record(&t)
vecv.record(&soma.v(0.5))



objref fih
fih = new FInitializeHandler("initspikes()")
cvode.atol(1e-12)
cvode.rtol(1e-12)

proc initspikes(){
   soma.v = VS
}



// Run the simulation:
tstop = 350
run() 


//\strobj = new StringFunctions()
strdef filename
sprint(filename, "output/scenario001_A%d_C%.1f_I%d_GLK%.1f_EREV%2.1f_VS%2.1f_result_NEURONHOC.txt", A, C, I, LK_G, LK_EREV, VS) 

// Save the data to a file:
objref savdata
savdata = new File()
savdata.wopen(filename)
savdata.printf("#t V\n")

objref tempmatrix
tempmatrix = new Matrix()
tempmatrix.resize(vecv.size(),2)
tempmatrix.setcol(0, vect)
tempmatrix.setcol(1, vecv)
tempmatrix.fprint(0,savdata, " %g")

savdata.close()
